<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="200" kdiffunit="mu2/s" />
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyRCaM"            id="RyRCaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC1"            id="RyRCaMC1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC2"            id="RyRCaMC2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC3"            id="RyRCaMC3"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC4"            id="RyRCaMC4"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC5"            id="RyRCaMC5"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMO1"            id="RyRCaMO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMO2"            id="RyRCaMO2"           kdiff="0" kdiffunit="mu2/s"/>
 
 <Reaction name = "RyRCaMe" id="RyRCaMe">
    <Reactant specieID="RyRCaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMC1"/>
    <forwardRate>5e-06</forwardRate> <!-- 2 Ca to 2 subunits-->
    <reverseRate>100e-3</reverseRate>
 </Reaction>

  <Reaction name = "RyRCaMa" id="RyRCaMa"> 
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="2"/> <!-- 2 Ca to 2 subunits Fully bound?-->
    <Product specieID="RyRCaMO1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>9600e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "RyRCaMb" id="RyRCaMb">
    <Reactant specieID="RyRCaMO1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>7e-6</forwardRate>
    <reverseRate>1.3</reverseRate>
  </Reaction>

   <Reaction name = "RyRCaMc" id="RyRCaMc">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>0.75e-6</forwardRate>
    <reverseRate>66.667e-1</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMd" id="RyRCaMd">
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMC2" />
    <forwardRate>8e-7</forwardRate>
    <reverseRate>1.235e-2</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMf" id="RyRCaMf">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMC3"/>
    <forwardRate>0.865e-7</forwardRate>
    <reverseRate>3</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMg" id="RyRCaMg">
    <Reactant specieID="RyRCaMO1"/>
    <Product specieID="RyRCaMC4"/>
    <forwardRate>4e-4</forwardRate>
    <reverseRate>1e-4</reverseRate>
  </Reaction>
   <Reaction name = "RyRCaMh" id="RyRCaMh">
    <Reactant specieID="RyRCaMO2"/>
    <Product specieID="RyRCaMC5"/>
    <forwardRate>2e-4</forwardRate>
    <reverseRate>1e-4</reverseRate>
  </Reaction>
 
  <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
   <Reaction name = "RyRflux1" id="RyRflux1">
     <Reactant specieID="RyRO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  <Reaction name = "RyRflux2" id="RyRflux2">
     <Reactant specieID="RyRO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
   <Reaction name = "RyRCaMflux1" id="RyRCaMflux1">
     <Reactant specieID="RyRCaMO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRCaMO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  <Reaction name = "RyRCaMflux2" id="RyRCaMflux2">
     <Reactant specieID="RyRCaMO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRCaMO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>    
</ReactionScheme>
